CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\load_data_csv\Batch_1\BR00138695
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:Brightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

FlagImage:[module_num:3|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.5
    Flag images based on high values?:Yes
    Maximum value:2.5
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    Ignore flag skips on last cycle?:No

EnhanceOrSuppressFeatures:[module_num:4|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enabled:False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
    Select the input image:DNA
    Name the output image:DNA_Enhanced
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:5|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notes:['', '1.2: 0.03']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1.3488
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,1
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    Log transform before thresholding?:No
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:0.01
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGPExponent
    Image or measurement?:Image
    Select the first image:AGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:7|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
    Select images to measure:AGPExponent
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGPBackSub
    Image or measurement?:Image
    Select the first image:AGPExponent
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_AGPExponent

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:AGPBackSub
    Name the output image:Enhanced_AGPBackSub
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:4
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    Enhancement method:Tubeness
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    Rescale result image:No

ImageMath:[module_num:10|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
    Operation:None
    Raise the power of the result by:0.7
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Enhanced_AGPBacksub_Exponent
    Image or measurement?:Image
    Select the first image:Enhanced_AGPBackSub
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Soma
    Image or measurement?:Image
    Select the first image:AGPBackSub
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhanced_AGPBacksub_Exponent
    Multiply the second image by:1
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
IdentifySecondaryObjects:[module_num:12|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notes:['need to improve this!!']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Soma
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0125,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:CellBodies
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Enhanced_AGPBackSub
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:CellBodies
    Name the tertiary objects to be identified:Neurites
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:16|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
    Select the input image:AGPExponent
    Name the output image:AGPExponent_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:17|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
    Select the input image:Mito
    Name the output image:Mito_Rescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.02,0.06
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
RescaleIntensity:[module_num:18|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
    Select the input image:DNA
    Name the output image:DNA_Rescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.012,0.02
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
GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Mito_Rescaled
    Select the image to be colored green:AGPExponent_Rescaled
    Select the image to be colored blue:DNA_Rescaled
    Name the output image:CellImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.5
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellImage
    Name the output image:Neurite_CellBody_Nuclei_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:Neurites
    Select outline color:yellow
    Select objects to display:CellBodies
    Select outline color:Blue
    Select objects to display:Nuclei

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Neurite_CellBody_Nuclei_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>
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    Saved file format:png
    Output file location:Default Output Folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
