CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\load_data_csv\Batch_1\BR00138695
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:Brightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:3|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notes:['', '1.2: 0.03']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,1
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    Log transform before thresholding?:No
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:0.01
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGPExponent
    Image or measurement?:Image
    Select the first image:AGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:5|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
    Select images to measure:AGPExponent
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGPBackSub
    Image or measurement?:Image
    Select the first image:AGPExponent
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_AGPExponent

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:AGPBackSub
    Name the output image:Enhanced_AGPBackSub
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:4
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    Enhancement method:Tubeness
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    Rescale result image:No

ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:0.7
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Enhanced_AGPBacksub_Exponent
    Image or measurement?:Image
    Select the first image:Enhanced_AGPBackSub
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Soma
    Image or measurement?:Image
    Select the first image:AGPBackSub
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhanced_AGPBacksub_Exponent
    Multiply the second image by:1
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
IdentifySecondaryObjects:[module_num:10|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notes:['need to improve this!!']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Soma
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0125,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:CellBodies
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Enhanced_AGPBackSub
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:CellBodies
    Name the tertiary objects to be identified:Neurites
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:15|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notes:['Skeletonize the CellBodiesPlusNeurites image']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
    Select the input image:CellImage
    Name the output image:CellImageSkel

MeasureObjectSkeleton:[module_num:16|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notes:['Measure the skeletonized cell bodies and neurites']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
    Select the seed objects:Nuclei
    Select the skeletonized image:CellImageSkel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureColocalization:[module_num:17|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:18|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:40
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:24|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei-outlines
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    Saved file format:png
    Output file location:Default Output Folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell-outlines
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    Saved file format:png
    Output file location:Default Output Folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
